PsychoPy2experiment version="2020.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = EDP
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 720]
  color = lightgray
  expName = EDP_stage1
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Routines
  Routine welcome
  Routine phase1
    ImageComponent interface_phase1
      image = ./interface/phase1.png
      size = (1280,720)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_phase1
      clickable = buttonOK_phase1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    ImageComponent buttonOK_phase1
      image = ./interface/buttonOK.png
      pos = (0, -300)
      size = (160,90)
      startVal [time (s)] = 0.0
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  Routine L
    ImageComponent interface_L
      image = ./interface/L.png
      saveStartStop = False
      size = (1280,720)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_L
      clickable = buttonA_L,buttonB_L
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_L
      color = red
      letterHeight = 35
      pos = (-150.6, -75.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = -500
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    SliderComponent slider_L
      color = black
      flip = True
      forceEndRoutine = False
      granularity = 5
      labels = (-2000,0)
      pos = (263.5, -189.5)
      size = (400, 50)
      startVal [condition] = n==5
      storeHistory = True
      styles = ('rating', 'whiteOnBlack')
      ticks = (-2000,0)
      units = pix
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    ImageComponent buttonA_L
      image = ./interface/buttonA.png
      pos = (-282.4, -189.5)
      saveStartStop = False
      size = (128,72)
      startVal [time (s)] = 0.0
      stopVal [condition] = n>4
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    ImageComponent buttonB_L
      image = ./interface/buttonB.png
      pos = (263.5, -189.5)
      saveStartStop = False
      size = (128,72)
      startVal [time (s)] = 0.0
      stopVal [condition] = n>4
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    PolygonComponent down_L
      fillColor = white
      ori = -90
      pos = (10,-180)
      saveStartStop = False
      shape = triangle
      size = (50,50)
      startVal [condition] = n==5
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    PolygonComponent up_L
      fillColor = white
      ori = 90
      pos = (517,-180)
      saveStartStop = False
      shape = triangle
      size = (50,50)
      startVal [condition] = n==5
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        last = core.getTime()
      Each Frame:
        if slider_L.markerPos != None:
            text_L.text = int(slider_L.markerPos)
            if mouse.isPressedIn(down_L):
                this = core.getTime()
                if this - last > 0.05:
                    slider_L.markerPos-=5
                last = this
            if mouse.isPressedIn(up_L):
                this = core.getTime()
                if this -last > 0.05:
                    slider_L.markerPos+=5
                last = this
      End Routine:
        if n == 5:
            L = int(slider_L.markerPos)
  Routine x1pos
    ImageComponent interface_x1pos
      image = ./interface/x1pos.png
      size = (1280,720)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_x1pos
      clickable = buttonA_x1pos,buttonB_x1pos
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_x1pos
      color = blue
      letterHeight = 35
      pos = (376.5, 0)
      startVal [time (s)] = 0.0
      text = 250
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    ImageComponent buttonA_x1pos
      image = ./interface/buttonA.png
      pos = (-282.4, -189.5)
      size = (128,72)
      startVal [time (s)] = 0.0
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    ImageComponent buttonB_x1pos
      image = ./interface/buttonB.png
      pos = (263.5, -189.5)
      size = (128,72)
      startVal [time (s)] = 0.0
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  Routine x1neg
    ImageComponent interface_x1neg
      image = ./interface/x1neg.png
      size = (1280,720)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_x1neg
      clickable = buttonA_x1neg,buttonB_x1neg
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_L_x1neg
      color = red
      letterHeight = 35
      pos = (-150.6, -75.8)
      startVal [time (s)] = 0.0
      text = test
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    TextComponent text_x1neg
      color = red
      letterHeight = 35
      pos = (376.5, 0)
      startVal [time (s)] = 0.0
      text = -250
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    ImageComponent buttonA_x1neg
      image = ./interface/buttonA.png
      pos = (-282.4, -189.5)
      size = (128,72)
      startVal [time (s)] = 0.0
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    ImageComponent buttonB_x1neg
      image = ./interface/buttonB.png
      pos = (263.5, -189.5)
      size = (128,72)
      startVal [time (s)] = 0.0
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  Routine phase2
    ImageComponent interface_phase2
      image = ./interface/phase2.png
      size = (1280,720)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_phase2
      clickable = buttonOK_phase2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent buttonOK_phase2
      image = ./interface/buttonOK.png
      pos = (0, -300)
      size = (160,90)
      startVal [time (s)] = 0.0
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  Routine L2
    ImageComponent interface_L2
      image = ./interface/L2.png
      size = (1280,720)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_L2
      clickable = buttonA_L2,buttonB_L2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_L2
      color = red
      letterHeight = 35
      pos = (395, -75.8)
      startVal [time (s)] = 0.0
      text = -500
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    TextComponent text_x1pos_L2
      color = blue
      letterHeight = 35
      pos = (395, 75.8)
      startVal [time (s)] = 0.0
      text = 250
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    ImageComponent buttonA_L2
      image = ./interface/buttonA.png
      pos = (-282.4, -189.5)
      size = (128,72)
      startVal [time (s)] = 0.0
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    ImageComponent buttonB_L2
      image = ./interface/buttonB.png
      pos = (263.5, -189.5)
      size = (128,72)
      startVal [time (s)] = 0.0
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  Routine xipos
    ImageComponent interface_xipos
      image = ./interface/xipos.png
      size = (1280,720)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_xipos
      clickable = buttonA_xipos,buttonB_xipos
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_xiprepos_xipos
      color = blue
      letterHeight = 35
      pos = (-150.6, 75.8)
      startVal [time (s)] = 0.0
      text = -500
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    TextComponent text_L2_xipos
      color = red
      letterHeight = 35
      pos = (395, -75.8)
      startVal [time (s)] = 0.0
      text = -500
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    TextComponent text_xipos
      color = blue
      letterHeight = 35
      pos = (395, 75.8)
      startVal [time (s)] = 0.0
      text = 250
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    ImageComponent buttonA_xipos
      image = ./interface/buttonA.png
      pos = (-282.4, -189.5)
      size = (128,72)
      startVal [time (s)] = 0.0
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    ImageComponent buttonB_xipos
      image = ./interface/buttonB.png
      pos = (263.5, -189.5)
      size = (128,72)
      startVal [time (s)] = 0.0
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  Routine phase3
    ImageComponent interface_phase3
      image = ./interface/phase3.png
      size = (1280,720)
      startVal [time (s)] = 0.0
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    ImageComponent buttonOK_phase3
      image = ./interface/buttonOK.png
      pos = (0, -300)
      size = (160,90)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = buttonOK_phase3
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine G2
    ImageComponent interface_G2
      image = ./interface/G2.png
      size = (1280,720)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_G2
      clickable = buttonA_G2,buttonB_G2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_G2
      color = blue
      letterHeight = 35
      pos = (395, 75.8)
      startVal [time (s)] = 0.0
      text = -500
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    TextComponent text_x1neg_G2
      color = red
      letterHeight = 35
      pos = (395, -75.8)
      startVal [time (s)] = 0.0
      text = 250
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    ImageComponent buttonA_G2
      image = ./interface/buttonA.png
      pos = (-282.4, -189.5)
      size = (128,72)
      startVal [time (s)] = 0.0
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    ImageComponent buttonB_G2
      image = ./interface/buttonB.png
      pos = (263.5, -189.5)
      size = (128,72)
      startVal [time (s)] = 0.0
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  Routine xineg
    ImageComponent interface_xineg
      image = ./interface/xineg.png
      size = (1280,720)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_xineg
      clickable = buttonA_xineg,buttonB_xineg
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_xipreneg_xineg
      color = red
      letterHeight = 35
      pos = (-150.6, -75.8)
      startVal [time (s)] = 0.0
      text = -500
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    TextComponent text_G2_xineg
      color = blue
      letterHeight = 35
      pos = (395, 75.8)
      startVal [time (s)] = 0.0
      text = -500
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    TextComponent text_xineg
      color = red
      letterHeight = 35
      pos = (395, -75.8)
      startVal [time (s)] = 0.0
      text = 250
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    ImageComponent buttonA_xineg
      image = ./interface/buttonA.png
      pos = (-282.4, -189.5)
      size = (128,72)
      startVal [time (s)] = 0.0
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    ImageComponent buttonB_xineg
      image = ./interface/buttonB.png
      pos = (263.5, -189.5)
      size = (128,72)
      startVal [time (s)] = 0.0
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  Routine end
  Routine interval
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = cross
      size = (30,30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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Flow
  Routine welcome
  Routine phase1
  Routine L
  Routine interval
  Routine x1pos
  Routine interval
  Routine x1neg
  Routine interval
  Routine phase2
  Routine L2
  Routine interval
  Routine xipos
  Routine interval
  Routine phase3
  Routine G2
  Routine interval
  Routine xineg
  Routine interval
  Routine end
