PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 720]
  color = lightgray
  expName = practice
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Routines
  Routine interval
    PolygonComponent cross
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (30,30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine CE
    ImageComponent interface_CE
      image = None
      saveStartStop = False
      size = (1280,720)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_CE
      clickable = buttonOK_CE
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent buttonOK_CE
      image = ./interface/buttonOK.png
      pos = (0,-300)
      saveStartStop = False
      size = (150,76)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      color = black
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = (-2000,0)
      pos = (263.5,-189.5)
      saveStartStop = False
      size = (400,50)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (-2000,0)
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    PolygonComponent down
      fillColor = $[1,1,1]
      ori = -90
      pos = (10,-189.5)
      shape = triangle
      size = (50,50)
      startVal [time (s)] = 0.0
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    PolygonComponent up
      fillColor = $[1,1,1]
      ori = 90
      pos = (517,-189.5)
      shape = triangle
      size = (50,50)
      startVal [time (s)] = 0.0
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    TextComponent text_Aup_CE
      letterHeight = 35
      pos = (-150.6,75.8)
      saveStartStop = False
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    TextComponent text_Adown_CE
      letterHeight = 35
      pos = (-150.6,-75.8)
      saveStartStop = False
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    TextComponent text_Bmiddle_CE
      letterHeight = 35
      pos = (376.5,0)
      saveStartStop = False
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    TextComponent text_Bup_CE
      letterHeight = 35
      pos = (395,75.8)
      saveStartStop = False
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    TextComponent text_Bdown_CE
      letterHeight = 35
      pos = (395,-75.8)
      saveStartStop = False
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        last = core.getTime()
        slider = visual.Slider(win=win, name='slider',
            size=(400,40), pos=(0,-189.5), units=None,
            labels=None, ticks=(slidermin,sliderMax),
            granularity=5, style=('rating', 'whiteOnBlack'),
            color='black', font='HelveticaBold',
            flip=True)
        slider.markerPos = (round((slidermin+sliderMax)/2/5))*5
      Each Frame:
        if slider.markerPos != None:
            #text.text = int(slider.markerPos)
            if mouse.isPressedIn(down):
                this = core.getTime()
                if this - last > 0.05:
                    slider.markerPos-=5
                last = this
            if mouse.isPressedIn(up):
                this = core.getTime()
                if this -last > 0.05:
                    slider.markerPos+=5
                last = this
  Routine phase
    ImageComponent interface_phase
      image = None
      size = (1280,720)
      startVal [time (s)] = 0.0
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    ImageComponent buttonOK_phase
      image = ./interface/buttonOK.png
      pos = (0, -300)
      size = (150,76)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_phase
      clickable = buttonOK_phase
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        interface_phase_list=['./interface/phase1.png', './interface/phase2.png', './interface/phase3.png']
  Routine TO
    ImageComponent interface_TO
      image = None
      saveStartStop = False
      size = (1280,720)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_TO
      clickable = buttonA,buttonB
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    ImageComponent buttonA
      image = ./interface/buttonA.png
      pos = (-282.4,-189.5)
      saveStartStop = False
      size = (128,72)
      startVal [time (s)] = 0.0
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    ImageComponent buttonB
      image = ./interface/buttonB.png
      pos = (263.5,-189.5)
      saveStartStop = False
      size = (128,72)
      startVal [time (s)] = 0.0
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    TextComponent text_Aup_TO
      letterHeight = 35
      pos = (-150.6,75.8)
      saveStartStop = False
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    TextComponent text_Adown_TO
      letterHeight = 35
      pos = (-150.6,-75.8)
      saveStartStop = False
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    TextComponent text_Bmiddle_TO
      letterHeight = 35
      pos = (376.5,0)
      saveStartStop = False
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    TextComponent text_Bup_TO
      letterHeight = 35
      pos = (395,75.8)
      saveStartStop = False
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    TextComponent text_Bdown_TO
      letterHeight = 35
      pos = (395,-75.8)
      saveStartStop = False
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Flow
  Routine phase
  Routine TO
  Routine interval
  Routine CE
